CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "Probabilities.tiff")
    Name to assign these images:probabilities
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:probabilities
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:issphere

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:issphere
    Name the primary objects to be identified:Spheres
    Typical diameter of objects, in pixel units (Min,Max):20,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:50
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.6
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Spheres
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:Spheres
    Name the output objects:filtered_spheres
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_MinorAxisLength
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:filtered_spheres
    Name the output image:sphereimg
    Select the color format:Grayscale
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:sphereimg
    Select method for constructing file names:From image filename
    Select image name for file prefix:probabilities
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:11|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/mnt/server_homes/vitoz
