CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "sphereseg_Probabilities.tiff")
    Name to assign these images:probab
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:probab
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:sphere
    Channel number:Green: 2
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    Image name:border
    Channel number:Blue: 3
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    Image name:bg

ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:sphereBorder
    Image or measurement?:Image
    Select the first image:border
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:sphere
    Multiply the second image by:1.0
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
Smooth:[module_num:7|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
    Select the input image:sphere
    Name the output image:spheresm
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:spheresm
    Name the primary objects to be identified:sphereCenter
    Typical diameter of objects, in pixel units (Min,Max):50,600
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:sphereCenter
    Calculate the Zernike features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:sphereCenter
    Name the output objects:spherecenterfil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20.0
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:spherecenterfil
    Name the objects to be identified:expandedSphere
    Select the method to identify the secondary objects:Propagation
    Select the input image:sphereBorder
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:expandedSphere
    Name the output image:SphereImg
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:expandedSphere
    Name the output image:SphereImgVis
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:SphereImg
    Select method for constructing file names:From image filename
    Select image name for file prefix:probab
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:SphereImgVis
    Select method for constructing file names:From image filename
    Select image name for file prefix:probab
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_maskvisualization
    Saved file format:png
    Output file location:Default Output Folder sub-folder|visualization
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:16|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/mnt/bbvolume/server_homes/vitoz
