CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Date>[0-9]+)-Vito-\wpheroid-p(?P<plate>[0-9]+)(?P<plateloc>[a-z]*)-(?P<day>[0-9]+)dps-ac(?P<acquisition>[0-9])_(?P<well>[A-Z][0-9]*)_*w*(?P<wl>.*)_p(?P<plateac>[0-9]+)_r(?P<scale>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'bfimage': u'Date', u'probabilities': u'Date', u'mask': u'Date'}, {u'bfimage': u'day', u'probabilities': u'day', u'mask': u'day'}, {u'bfimage': u'plate', u'probabilities': u'plate', u'mask': u'plate'}, {u'bfimage': u'well', u'probabilities': u'well', u'mask': u'well'}, {u'bfimage': u'acquisition', u'probabilities': u'acquisition', u'mask': u'acquisition'}, {u'bfimage': u'scale', u'probabilities': u'scale', u'mask': u'scale'}, {u'bfimage': u'wl', u'probabilities': u'wl', u'mask': u'wl'}, {u'bfimage': u'plateloc', u'probabilities': u'plateloc', u'mask': u'plateloc'}, {u'bfimage': u'plateac',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
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "_mask.tiff")
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    Name to assign these objects:mask
    Select the image type:Objects
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    Select the rule criteria:and (file does endwith "_r5.tiff")
    Name to assign these images:bfimage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_Probabilities.tiff")
    Name to assign these images:probabilities
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
OverlayOutlines:[module_num:5|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:bfimage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:mask

ColorToGray:[module_num:6|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
    Select the input image:probabilities
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:IsSphere
    Channel number:2
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    Image name:IsOther

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:mask
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:8|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:bfimage
    Select objects to measure:mask
    Texture scale to measure:3
    Measure images or objects?:Both

MeasureObjectIntensity:[module_num:9|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
    Hidden:3
    Select an image to measure:bfimage
    Select an image to measure:IsSphere
    Select an image to measure:IsOther
    Select objects to measure:mask

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Z:\\server_homes\\ljuanita\\Data\\20180314_3celllines_final-screen\\20180327_brightfield_segmentation_realSize\\cpout
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:bfimage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:12|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/mnt/bbvolume/server_homes/vitoz
