CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<acsession>.*)_a(?P<acid>[0-9]+)_ac_.*l(?P<cutid>[0-9]+)_x(?P<xcoord>[0-9]+)_y(?P<ycoord>[0-9]+).*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'GFP': u'acid', u'Full': u'acid', u'Ilastik': u'acid', u'sm': u'acid'}, {u'GFP': u'cutid', u'Full': u'cutid', u'Ilastik': u'cutid', u'sm': u'cutid'}, {u'GFP': u'acsession', u'Full': u'acsession', u'Ilastik': u'acsession', u'sm': u'acsession'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_ilastik_")
    Name to assign these images:Ilastik
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "_full_l")
    Name to assign these images:Full
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_if_fcrop_c0_s2.tiff")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/mnt/bbvolume/server_homes/vitoz/mnt/tmp/scratch/vitoz/Data/Analysis/20190726_oexp_p165-161-bigoverexpression_v3_a1/crop/imc_full_sm.tiff   
    Name to assign this image:sm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectSpilloverApply:[module_num:5|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
    Select the input image:Full
    Name the output image:FullSpillCorr
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

ColorToGray bb:[module_num:6|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
    Select the input image:FullSpillCorr
    Conversion method:Split
    Image type:Channels
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
    Convert hue to gray?:Yes
    Name the output image:OrigHue
    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:Yes
    Name the output image:OrigValue
    Channel count:2
    Channel number:36
    Relative weight of the channel:1.0
    Image name:Er167
    Channel number:38
    Relative weight of the channel:1.0
    Image name:Tm169

StackImages:[module_num:7|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
    Name the output image:ImcGfp
    Hidden:2
    Image name:Er167
    Image name:Tm169

Smooth Multichannel:[module_num:8|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
    Select the input image:ImcGfp
    Name the output image:ImcGfpFil
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Resize:[module_num:9|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
    Select the input image:ImcGfpFil
    Name the output image:ImcGfpFil2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Bilinear
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    Additional image count:0

StackImages:[module_num:10|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
    Name the output image:GfpClass
    Hidden:2
    Image name:GFP
    Image name:ImcGfpFil2x

SaveImages H5:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:GfpClass
    Select method for constructing file names:From image filename
    Select image name for file prefix:Full
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP
    Saved file format:h5
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|

CreateBatchFiles:[module_num:12|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/mnt/bbvolume/server_homes/vitoz
