CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['\\\\d{8}_5C-3_slide6_ac\\\\d*_vz_s\\\\d*_p\\\\d*_r\\\\d*_a\\\\d*_ac_full_cropmask_l\\\\d*_x\\\\d*_y\\\\d*']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<site>[0-9]{8}_.*_slide[0-9]+_ac[0-9]+.*_s[0-9]+_p[0-9]+_r[0-9]+_a[0-9]+)_.*_l(?P<CropID>[0-9]+)_x(?P<PosX>[0-9]+)_y(?P<PosY>[0-9]+).*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'gfp2x': u'site', u'ProbPos2x': u'site', u'FullStack': u'site', u'ProbabStack': u'site', u'gfpclass2x': u'site', u'dapi2x': u'site', u'dapiqc2x': u'site', u'cell': u'site', u'sm': u'site', u'ProbSphere': u'site', u'nuclei': u'site', u'SphereSeg': u'site'}, {u'gfp2x': u'CropID', u'ProbPos2x': u'CropID', u'FullStack': u'CropID', u'ProbabStack': u'CropID', u'gfpclass2x': u'CropID', u'dapi2x': u'CropID', u'dapiqc2x': u'CropID', u'cell': u'CropID', u'sm': u'CropID', u'ProbSphere': u'CropID', u'nuclei': u'CropID', u'SphereSeg': u'CropID'}]
    Image set matching method:Metadata
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    Assignments count:11
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_full") (file doesnot contain "cropmask") (file doesnot contain "_GFP")
    Name to assign these images:FullStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "s2_Probabilities.tiff") (file doesnot contain "_spheresegalign_")
    Name to assign these images:ProbabStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "sphereseg_Probabilities_")
    Name to assign these images:ProbSphere
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_mask.tiff")
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    Name to assign these objects:cell
    Select the image type:Objects
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    Select the rule criteria:and (file does containregexp ".*_cropmask_l[0-9]+_x[0-9]+_y[0-9]+.tiff")
    Name to assign these images:SphereSeg
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_nucmask.tiff")
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    Name to assign these objects:nuclei
    Select the image type:Objects
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    Select the rule criteria:and (file does endwith "if_fcrop_c1_s2_Probabilities.tiff")
    Name to assign these images:dapiqc2x
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "if_fcrop_c0_s2_Probabilities.tiff")
    Name to assign these images:gfpclass2x
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "if_fcrop_c0_s2.tiff")
    Name to assign these images:gfp2x
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "if_fcrop_c1_s2.tiff")
    Name to assign these images:dapi2x
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_GFP_Probabilities.tiff")
    Name to assign these images:ProbPos2x
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:/mnt/bbvolume/server_homes/vitoz/mnt/tmp/scratch/vitoz/Data/Analysis/20190726_oexp_p165-161-bigoverexpression_v3_a1/crop/imc_full_sm.tiff   
    Name to assign this image:sm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:ProbabStack
    Name the output image:ProbSegmentation
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

Smooth Multichannel:[module_num:6|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
    Select the input image:FullStack
    Name the output image:FullStackFiltered
    Select smoothing method:Remove single hot pixels
    Calculate artifact diameter automatically?:Yes
    Typical artifact diameter:16.0
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth Multichannel:[module_num:7|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
    Select the input image:FullStackFiltered
    Name the output image:FullStackMedian
    Select smoothing method:Median Filter Scipy
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

MaskToBinstack:[module_num:8|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
    Select the type of input:Image
    Select input images:SphereSeg
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    Indicate the object id:\g<CropID>

Transform Binary:[module_num:9|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
    Select the input image:BinStack
    Name the transformed image:DistStack

ColorToGray:[module_num:10|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enabled:False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
    Select the input image:ProbPos2x
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2

Smooth Multichannel:[module_num:11|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enabled:False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
    Select the input image:Channel1
    Name the output image:FullStackMedian
    Select smoothing method:Median Filter Scipy
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

Smooth:[module_num:12|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enabled:False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
    Select the input image:Channel1
    Name the output image:FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:0
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
CorrectSpilloverApply:[module_num:13|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
    Select the input image:FullStackFiltered
    Name the output image:FullStackComp
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

Smooth Multichannel:[module_num:14|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
    Select the input image:FullStackComp
    Name the output image:FullStackCompMedian
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Neighborhood filter size:3
    Hot pixel threshold:50.0
    Scale hot pixel threshold to image scale?:Yes

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:Default
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:Default

ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:nuclei
    Name the output objects:nucleiexp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
RelateObjects:[module_num:17|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
    Parent objects:nucleiexp
    Child objects:cell
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:cell
    Select the smaller identified objects:nucleiexp
    Name the tertiary objects to be identified:cyto
    Shrink smaller object prior to subtraction?:Yes

GrayToColor:[module_num:19|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
    Select a color scheme:Stack
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    Name the output image:ifstack2x
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    Hidden:2
    Image name:gfp2x
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    Image name:dapi2x
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
StackImages:[module_num:20|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enabled:False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
    Name the output image:ifstack2x
    Hidden:2
    Image name:gfp2x
    Image name:dapi2x

Resize:[module_num:21|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
    Select the input image:ifstack2x
    Name the output image:IfStack
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:3
    Select the additional image?:gfpclass2x
    Name the output image:ProbGfp
    Select the additional image?:dapiqc2x
    Name the output image:ProbQc
    Select the additional image?:ProbPos2x
    Name the output image:ProbPos

ColorToGray:[module_num:22|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enabled:False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
    Select the input image:ifstack
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2

MeasureObjectIntensity Multichannel:[module_num:23|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
    Hidden:12
    Select an image to measure:FullStackFiltered
    Select an image to measure:DistStack
    Select an image to measure:BinStack
    Select an image to measure:ProbSegmentation
    Select an image to measure:FullStackMedian
    Select an image to measure:FullStackCompMedian
    Select an image to measure:FullStackComp
    Select an image to measure:ProbSphere
    Select an image to measure:IfStack
    Select an image to measure:ProbGfp
    Select an image to measure:ProbQc
    Select an image to measure:ProbPos
    Number of channels:52
    Number of channels:3
    Number of channels:3
    Number of channels:3
    Number of channels:52
    Number of channels:51
    Number of channels:51
    Number of channels:3
    Number of channels:2
    Number of channels:3
    Number of channels:3
    Number of channels:2
    Select objects to measure:cell

MeasureObjectIntensity Multichannel:[module_num:24|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
    Hidden:3
    Select an image to measure:FullStackFiltered
    Select an image to measure:ProbPos
    Select an image to measure:IfStack
    Number of channels:52
    Number of channels:2
    Number of channels:2
    Select objects to measure:nucleiexp
    Select objects to measure:cyto

CorrectSpilloverMeasurements:[module_num:25|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
    Select Object:cell
    Select the measurment to correct for spillover:Intensity_MeanIntensity_FullStackFiltered
    Name the output compmeasurement suffix:Comp
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

CorrectSpilloverMeasurements:[module_num:26|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
    Select Object:nucleiexp
    Select the measurment to correct for spillover:Intensity_MeanIntensity_FullStackFiltered
    Name the output compmeasurement suffix:Comp
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

CorrectSpilloverMeasurements:[module_num:27|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
    Select Object:cyto
    Select the measurment to correct for spillover:Intensity_MeanIntensity_FullStackFiltered
    Name the output compmeasurement suffix:Comp
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

MeasureObjectSizeShape:[module_num:28|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
    Select objects to measure:cell
    Select objects to measure:cyto
    Select objects to measure:nucleiexp
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:29|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
    Select the input objects:cell
    Name the output image:cell
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:30|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
    Select the input objects:cyto
    Name the output image:cyto
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:31|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
    Select the input objects:nucleiexp
    Name the output image:nucleiexp
    Select the color format:uint16
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:FullStackFiltered
    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_filtered
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:FullStackComp
    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_comp
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:IfStack
    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi2x
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:ProbQc
    Select method for constructing file names:From image filename
    Select image name for file prefix:dapiqc2x
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:ProbPos
    Select method for constructing file names:From image filename
    Select image name for file prefix:ProbPos2x
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:ProbGfp
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfpclass2x
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_s1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:cyto
    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cyto
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:nucleiexp
    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nucleiexp
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:SphereSeg
    Select method for constructing file names:From image filename
    Select image name for file prefix:SphereSeg
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_sphere
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:42|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:cyto|Parent_cell,cyto|Parent_nucleiexp,cyto|Number_Object_Number,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c40,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c52,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c51,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c50,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c7,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c6,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c19,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c18,cyto|Intensity_MeanIntensityComp_FullStackFiltered_c39,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:43|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:44|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/
    Cluster root path:/mnt/bbvolume/server_homes/
    Local root path:///Y:/server_homes/
    Cluster root path:/mnt/bbvolume/server_homes/
    Local root path:Y:/server_homes/
    Cluster root path:/mnt/bbvolume/server_homes/
    Local root path:Y:\server_homes\
    Cluster root path:/mnt/bbvolume/server_homes/
